PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = Causality
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        upperBound = 0.4
        endTime = 0
        pause = 0
        endTimeSet = 0
      Begin Routine:
        x1 = -20
        x2 = 0
        pauseCalculated = 0
        endTimeSet = 0
        endTime = 0
        startPos = -20
        rectangleSize = 1
        speedCmS = 40

        currentScene = 1
        staircase = round(random())

        if staircase == 0 and staircaseTrialNo[staircase] > globalTrialNo/2:
            staircase = 1
        if staircase == 1 and staircaseTrialNo[staircase] > globalTrialNo/2:
            staircase = 0

        if trialCounter <= globalTrialNo:
            if staircase == 0:
                    phi = 0.25
                    initN = upperBound
                    staircaseTrialNo[staircase] += 1
                    if localTrialNo[staircase][currentScene] > maxNoFlat:
                        i = 1
                        while (i <= noOfMiniScenes):
                            if localTrialNo[staircase][i] <= maxNoFlat:
                                currentScene = i
                            i = i + 1
            else:
                    phi = 0.75
                    initN = 0
                    staircaseTrialNo[staircase] += 1
                    if localTrialNo[staircase][currentScene] > maxNoFlat:
                        i = 1
                        while (i <= noOfMiniScenes):
                            if localTrialNo[staircase][i] <= maxNoFlat:
                                currentScene = i
                            i = i + 1

        trial = localTrialNo[staircase][currentScene]

        if trial == 1:
           levList[staircase][currentScene][trial] = initN
        elif trial == 2:
            levList[staircase][currentScene][trial] = initN-(initStep/2)*(kestList[staircase][currentScene][trial-1]-phi)
        else:
            levList[staircase][currentScene][trial] = levList[staircase][currentScene][trial-1]-(initStep/(reversals+2))*(kestList[staircase][currentScene][trial-1]-phi)

        print("Before quality level is: " + str(levList[staircase][currentScene][trial]))
        # bound range
        if staircase ==  0:
            if levList[staircase][currentScene][trial] > initN:
                levList[staircase][currentScene][trial] = initN
            if levList[staircase][currentScene][trial] < 0:
                levList[staircase][currentScene][trial] = 0
        elif staircase == 1:
            if levList[staircase][currentScene][trial] < initN:
                levList[staircase][currentScene][trial] = initN
            if levList[staircase][currentScene][trial] < 0:
                levList[staircase][currentScene][trial] = 0

        pause = levList[staircase][currentScene][trial]
        pauseCalculated = 1
        print("Current pause level is: " + str(pause))
      Each Frame:
        if pauseCalculated == 1:
            if(x1 < -1):
                x1 = startPos + speedCmS*t
            elif endTimeSet == 0:
                print("Pause is: " + str(pause))
                endTime = t + pause
                endTimeSet = 1
            if (endTime) < t and endTimeSet == 1 and x2 < (-1) * startPos:
                x2 = speedCmS * (t-(endTime))
            print("End time " + str(endTime))
            print("Time " + str(t))
            print("x2 " + str(x2))
            #print(t)
      End Routine:
        # store level and response
        #respList.append(response)
        thisExp.addData('Trial No.', localTrialNo[staircase][currentScene])
        #thisExp.addData('Comp Side', refSide * -1)
        #thisExp.addData('Ref Num', nRefImage)
        thisExp.addData('Level List', levList[staircase][currentScene][trial])
        thisExp.addData('Puase Time', pause)
        thisExp.addData('Staircase', staircase)
        thisExp.addData('Scene No', currentScene)

        kestResp = 1
        if resp.keys == 'y':
            kestResp = 0 # causal relation



        kestList[staircase][currentScene][trial] = kestResp
        thisExp.addData('causal?', 'yes' if kestResp == 0 else 'no')

        # count reversals
        if localTrialNo[staircase][currentScene] > 1:
            if kestList[staircase][currentScene][trial] != kestList[staircase][currentScene][trial-1]:
                reversals += 1
                reverseList[staircase][currentScene][reversals] = levList[staircase][currentScene][trial-1]

        # increment trials
        localTrialNo[staircase][currentScene] += 1
        trialCounter = trialCounter + 1
    PolygonComponent A
      fillColor = $[1,1,1]
      pos [set every frame] = (x1, 0)
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 2.0
      units = cm
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    PolygonComponent B
      fillColor = $[1,1,1]
      pos [set every frame] = (x2, 0)
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 2.0
      units = cm
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    KeyboardComponent resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 2.3
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    StaticComponent ISI
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.3
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 2.3
      text = Please record your answer 
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  Routine intro
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Please evaluate the following sequences.

        If you consider there is a causal relationship between the objects in the scene (i.e. the first object is causing the stationary one to move) please press the "Y" key.

        If you consider the event does not have a causal nature press the "N".

        Press any key to start.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        initStep = 0.2
        upperBound = 400
        #noOfMiniScenes  = 3
        noOfMiniScenes = 1

        reversals = 0
        trialCounter = 1

        reversalsSharp = 0
        reversalsFlat =  0



        levList = [0] * 2
        respList = [0] * 2
        kestList = [0] * 2
        reverseList = [0] * 2
        localTrialNo = [0] * 2
        staircaseTrialNo = [1] * 2

        for i in range(2):
            levList[i] = [0] * (noOfMiniScenes + 2)
            respList[i] = [0] * (noOfMiniScenes + 2)
            kestList[i] = [0] * (noOfMiniScenes + 2)
            reverseList[i] = [0] * (noOfMiniScenes + 2)
            localTrialNo[i] = [0] * (noOfMiniScenes + 2)
            for j in range(noOfMiniScenes + 2):
                levList[i][j] = [0] * 100
                respList[i][j] = [0] * 100
                kestList[i][j] = [0] * 100
                reverseList[i][j] = [0] * 100
                localTrialNo[i][j] = 1

        globalTrialNo = 60
        maxNoFlat = globalTrialNo/(noOfMiniScenes * 2)
Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 60
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    Routine trial
  LoopTerminator trials
