PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  color = black
  expName = Causality
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import math
        import numpy
        import random

        def calculatePointTheta(initPoint, theta, direction):
            retX = initPoint.X + areaOfEffect * round(math.cos(theta),8) * direction
            retY = initPoint.Y + areaOfEffect * round(math.sin(theta),8) * direction
            return Point(retX, retY)

        def getDistance(x1,x2,y1,y2):
            deltaX = x2 - x1
            deltaY = y2 - y1
            return math.pow(deltaX,2) + math.pow(deltaY,2)

        def normaliseAngle(angle):
            while angle > 2 * math.pi:
                angle -= 2.0 * np.pi

            while angle < 0:
                angle += 2.0 * np.pi
            return angle

        def calculateSectors(noOfCollisions):
            offsetSectors = 0
            sectorLimits = []
            for x in range(noOfCollisions):
                angle1 = math.radians(x * 360/noOfCollisions) + offsetSectors
                angle2 = math.radians((x+1) * 360/noOfCollisions) + offsetSectors
                angle1_normalised = normaliseAngle(angle1)
                angle2_normalised = normaliseAngle(angle2)
                if angle1_normalised < angle2_normalised:
                    sectorLimits.append((normaliseAngle(angle1),normaliseAngle(angle2)))
                else:
                    sectorLimits.append((normaliseAngle(angle2),normaliseAngle(angle1)))
                print("Sector angles are " + str(normaliseAngle(angle1)) + " " + str(normaliseAngle(angle2)))
            return sectorLimits

        def isInSector(a,A,polarPoint, sector):
            flagRadius = a < polarPoint[0] and polarPoint[0] <= A
            flagTheta = sector[0] <= polarPoint[1] and polarPoint[1] <= sector[1]
            return (flagRadius and flagTheta)


        def findNewPoints(sectorL1, sectorL2, radius):
            angle = random.uniform(sectorL1+0.25, sectorL2-0.25)
            r = round(random.uniform(2, radius), 2)
            xCoord = r * math.cos(angle)
            yCoord = r * math.sin(angle)
            theta = round(random.random()*math.radians(360),6)
            initPoint = calculatePointTheta(Point(xCoord,yCoord), theta, -1)
            midPoint = Point(xCoord,yCoord)
            endPoint = calculatePointTheta(Point(xCoord,yCoord), theta, 1)
            return [initPoint,midPoint, endPoint,theta]

        def calculateCirclePoints(radius,noOfCollisions):
            samplePoints = []
            sectorLimits = calculateSectors(noOfCollisions)
            for sector in sectorLimits:
                newPoints = findNewPoints(sector[0],sector[1],radius)
                initPoint = newPoints[0]
                endPoint = newPoints[2]
                #print("PointsX " + str(xCoord) + " " + str(initPoint.X) + " mid " + str(endPoint.X))
                #print("PointsY " + str(yCoord) + " " + str(initPoint.Y) + " mid " + str(endPoint.Y))
                #print("Caretsian Init " + str(cartesianToPolar(initPoint)[1]) + " " + str(cartesianToPolar(endPoint)[1]))
                if isInSector(2,radius,cartesianToPolar(initPoint),sector) and isInSector(2,radius,cartesianToPolar(endPoint),sector):
                    samplePoints.append((newPoints[1],newPoints[3]))
                    print("append")
                else:
                    while not (isInSector(2,radius,cartesianToPolar(initPoint),sector) and isInSector(2,radius,cartesianToPolar(endPoint),sector)):
                        newPoints = findNewPoints(sector[0],sector[1],radius)
                        initPoint = newPoints[0]
                        endPoint = newPoints[2]
                    samplePoints.append((newPoints[1],newPoints[3]))
            return samplePoints

        def cartesianToPolar(point):
            r = math.sqrt(math.pow(point.X,2) + math.pow(point.Y,2))
            theta = normaliseAngle(math.atan2(point.Y,point.X))
            #print("Point theta is " + str(theta))
            return (r,theta)

        def createObject(pointCoord,colour):
          return visual.ShapeStim(
                win=win, name='A',units='cm',
                size=(0.5, 0.5), vertices='circle',
                ori=0, pos=[pointCoord.X,pointCoord.Y],
                lineWidth=1,     colorSpace='rgb',  lineColor=[1,1,1], fillColor=[1,1,colour],
                opacity=1, depth=-1.0, interpolate=True)

        def calculateDirection(theta):
            if theta > math.radians(90) and theta <= math.radians(270):
                xDirection = -1
            else:
                xDirection = 1
            if theta > math.radians(180) and theta < math.radians(360):
                yDirection = -1
            else:
                yDirection = 1
            return (xDirection,yDirection)

        class Point(object):
         #Creates a point on a coordinate plane with values x and y.
            def __init__(self, x, y):
                self.X = x
                self.Y = y

        class Line():
            def __init__(self, objectA, objectB, theta):
                self.slope = 20
                self.pointA = Point(objectA.pos[0], objectA.pos[1])
                self.pointB = Point(objectB.pos[0], objectB.pos[1])
                deltaX = objectB.pos[0] - objectA.pos[0]
                deltaY = objectB.pos[1] - objectA.pos[1]
                direction = math.atan2(deltaY,deltaX)
                self.directionVector = direction
                self.b = self.pointB.Y - self.slope * self.pointB.X

        class Collision:
            def __init__(self, midPoint, speed, theta):
                self.theta = theta
                self.midPoint = midPoint
                self.objectB = createObject(midPoint,1)
                self.objectA = createObject(calculatePointTheta(self.midPoint,theta, -1),1)
                self.initPoint = Point(self.objectA.pos[0], self.objectA.pos[1])
                self.endPoint = calculatePointTheta(self.midPoint, theta,1)
                self.speed = speed
                self.lineEq = Line(self.objectA,self.objectB,self.theta)
                self.direction = calculateDirection(self.theta)
                self.reachTimer = 0
                self.movingA = 1
                self.wasPaused = 0








        areaOfEffect = 2
        upperBound = 0.4
        endTime = 0
        pause = 0
        endTimeSet = 0
        isCheckTrial = 0

        yA = -6
        yB = -6
      Begin Routine:
        import math
        import random

        theta = math.radians(200)
        collisionSpeed = 0.02



        #noOfCollisions = 7
        crossy.setPos((0,0))
        radius = 7


        ############ Setting up scene ###############

        circlePoints = calculateCirclePoints(radius,noOfCollisions)
        collisions = []
        texttime = 7.2
        currentScene = int(random.random() * noOfMiniScenes) + 1
        if currentScene == 1:
            #for area of effect = 2, aprox mean of 0.013 for 1 visangle or cm per sec
            speedInterval = (0.009,0.017)
            texttime = 7
        elif currentScene == 2:
            #for area of effect = 2, aprox mean of 0.051 for 4 visangle or cm per sec
            speedInterval = (0.047,0.055)
            texttime = 4

        for point in circlePoints:
            collisionSpeed =  random.uniform(speedInterval[0],speedInterval[1])
            collisions.append(Collision(point[0], collisionSpeed, point[1]))

        #collisions.append(c)

        #print(str(c.speed) + " " + str(c.lineEq.slope) + " " + str(c.lineEq.b))
        #for c in collisions:
        #    print("PointsA " + str(c.objectA.pos[0]) + " " + str(c.objectA.pos[1]) + " mid " + str(c.midPoint.X) + " " + str(c.midPoint.Y))
        #    print("PointsB " + str(c.objectB.pos[0]) + " " + str(c.objectB.pos[1]) + " end " + str(c.endPoint.X) + " " + str(c.endPoint.Y))
        #    print("PointsYLineeq " + str(c.lineEq.slope) + " " + str(c.lineEq.b))
        #    print("Direction " + str(c.direction))
        #    print("")







        pauseCalculated = 0
        endTime = 0
        movingA = 1
        wasPaused = 0
        startPos = -12
        rectangleSize = 1
        speedCmS = 40

        side = 1
        if random.random() < 0.5:
            side = -1


        ############ Kesten ###############

        staircase = round(random.random())

        if trialCounter in catchTrials and isCheckTrial == 0:
            isCheckTrial = 1
            #print('Chirp')
        elif isCheckTrial == 1:
            isCheckTrial = 0
            trialCounter = trialCounter - 1

        if isCheckTrial == 0:
            print("what's up " + str(trialCounter) + " " + str(isCheckTrial))
            if staircase == 0 and staircaseTrialNo[staircase] > globalTrialNo/2:
                staircase = 1
            if staircase == 1 and staircaseTrialNo[staircase] > globalTrialNo/2:
                staircase = 0

            if trialCounter <= globalTrialNo:
                if staircase == 0:
                        phi = 0.25
                        initN = upperBound
                        staircaseTrialNo[staircase] += 1
                        if localTrialNo[staircase][currentScene] > maxNoFlat:
                            i = 1
                            while (i <= noOfMiniScenes):
                                if localTrialNo[staircase][i] <= maxNoFlat:
                                    currentScene = i
                                i = i + 1
                else:
                        phi = 0.75
                        initN = 0
                        staircaseTrialNo[staircase] += 1
                        if localTrialNo[staircase][currentScene] > maxNoFlat:
                            i = 1
                            while (i <= noOfMiniScenes):
                                if localTrialNo[staircase][i] <= maxNoFlat:
                                    currentScene = i
                                i = i + 1

            trial = localTrialNo[staircase][currentScene]

            if trial == 1:
               levList[staircase][currentScene][trial] = initN
            elif trial == 2:
                levList[staircase][currentScene][trial] = initN-(initStep/2)*(kestList[staircase][currentScene][trial-1]-phi)
            else:
                levList[staircase][currentScene][trial] = levList[staircase][currentScene][trial-1]-(initStep/(reversals+2))*(kestList[staircase][currentScene][trial-1]-phi)

            #print("Before quality level is: " + str(levList[staircase][currentScene][trial]))
            # bound range
            if staircase ==  0:
                if levList[staircase][currentScene][trial] > initN:
                    levList[staircase][currentScene][trial] = initN
                if levList[staircase][currentScene][trial] < 0:
                    levList[staircase][currentScene][trial] = 0
            elif staircase == 1:
                if levList[staircase][currentScene][trial] < initN:
                    levList[staircase][currentScene][trial] = initN
                if levList[staircase][currentScene][trial] < 0:
                    levList[staircase][currentScene][trial] = 0

            pause = levList[staircase][currentScene][trial]
            pauseCalculated = 1
            #print("Current pause level is: " + str(pause))

        else:
            pause = 1.0
            pauseCalculated = 1

        counterI = 0
      Each Frame:
        import math
        import random

        for col in collisions:
            col.objectA.draw()
            col.objectB.draw()

        #c.objectA.draw()
        ##c.objectB.draw()

        if pauseCalculated == 1 and t > 1.0:
            #print("PointsA x:" + str(c.objectA.pos[0]) + " y: " + str(c.objectA.pos[1]) + " " + str(c.midPoint.X)+ " " + str(c.midPoint.Y))
            #if abs(c.objectA.pos[0]) < abs(c.midPoint.X - 0.5) and abs(c.objectA.pos[1]) < abs(c.midPoint.Y - 0.5):
            for c in collisions:
                if getDistance(c.objectA.pos[0],c.objectB.pos[0],c.objectA.pos[1],c.objectB.pos[1]) > c.objectA.size[0] / 2 and c.movingA == 1:
                    #print("get distance " + str(getDistance(c.objectA.pos[0],c.objectB.pos[0],c.objectA.pos[1],c.objectB.pos[1])) + " size " + str(c.objectA.size[0]))
                #if (abs(hypothenuse(c.objectB.pos[0],c.objectB.pos[1]) - hypothenuse(c.objectA.pos[0],c.objectA.pos[1])) > c.objectA.size[0]) and movingA == 1:
                    #print("Move A " + str(c.objectA.pos[0]) + " " +  (c.objectA.pos[1]))
                    x = c.objectA.pos[0] + (c.speed * math.cos(c.lineEq.directionVector))
                    y = c.objectA.pos[1] + (c.speed * math.sin(c.lineEq.directionVector))
                    c.objectA.setPos((x,y))
                else:
                    #print("PointsA x:" + str(c.objectA.pos[0]) + " y: " + str(c.objectA.pos[1]))
                    c.movingA = 0
                    if c.wasPaused == 0:
                        c.reachTimer = t
                        print("Timer is: " + str(c.reachTimer) + "speed was: " + str(areaOfEffect/(c.reachTimer - 1.0)))
                        c.wasPaused = 1
                    else:

                        if (t - c.reachTimer) > pause and c.wasPaused == 1:
                            #print("PointsB " + str(c.objectB.pos[0]) + " "  + str(c.objectB.pos[1])+ " ")
                            #if abs(c.objectB.pos[0]) < abs(c.endPoint.X - 0.5) and abs(c.objectB.pos[1]) < abs(c.endPoint.Y - 0.5):
                            if getDistance(c.objectB.pos[0],c.endPoint.X,c.objectB.pos[1],c.endPoint.Y) > c.objectA.size[0] / 2 and c.movingA == 0:
                                #print("endPoint: " + str(c.endPoint.X) + " " + str(c.endPoint.Y))
                               # print(str(getDistance(c.objectB.pos[0],c.endPoint.X,c.objectA.pos[1],c.endPoint.Y)))
                                x2 = c.objectB.pos[0] + (c.speed * math.cos(c.lineEq.directionVector))
                                y2 = c.objectB.pos[1] + (c.speed * math.sin(c.lineEq.directionVector))
                                c.objectB.setPos((x2,y2))

                if t > texttime:
                    for c in collisions:
                        c.objectA.setPos((100,100))
                        c.objectB.setPos((100,100))
                        crossy.setPos((100,100))

                #print("End time " + str(endTime))
                #print("Time " + str(t))
                #print("x2 " + str(x2))
                #print(t)
      End Routine:
        # store level and response
        #respList.append(response)
        thisExp.addData('Trial No.', localTrialNo[staircase][currentScene])
        #thisExp.addData('Comp Side', refSide * -1)
        #thisExp.addData('Ref Num', nRefImage)
        thisExp.addData('Level List', levList[staircase][currentScene][trial])
        thisExp.addData('Puase Time', pause)
        thisExp.addData('Staircase', staircase)
        thisExp.addData('Scene No', currentScene)

        kestResp = 1
        if resp.keys == 'y':
            kestResp = 0 # causal relation




        thisExp.addData('causal?', 'yes' if kestResp == 0 else 'no')

        if isCheckTrial == 0:
            kestList[staircase][currentScene][trial] = kestResp
            # count reversals
            if localTrialNo[staircase][currentScene] > 1:
                if kestList[staircase][currentScene][trial] != kestList[staircase][currentScene][trial-1]:
                    reversals += 1
                    reverseList[staircase][currentScene][reversals] = levList[staircase][currentScene][trial-1]

            # increment trials
            localTrialNo[staircase][currentScene] += 1
        trialCounter = trialCounter + 1
    KeyboardComponent resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = $texttime
      text = Please record your answer 
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    PolygonComponent crossy
      fillColor = red
      lineColor = red
      opacity [set every frame] = 1
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $texttime
      units = cm
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  Routine intro
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Please evaluate the following sequences.

        If you consider there is a causal relationship between the objects in the scene (i.e. the first object is causing the stationary one to move) please press the "Y" key.

        If you consider the event does not have a causal nature press the "N".

        Please fixate your gaze on the RED CROSS when it appears on screen.

        Press any key to start.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Py
  Routine conditions_
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        initStep = 0.2
        upperBound = 400
        noOfMiniScenes  = 2

        reversals = 0
        trialCounter = 1

        reversalsSharp = 0
        reversalsFlat =  0



        levList = [0] * 2
        respList = [0] * 2
        kestList = [0] * 2
        reverseList = [0] * 2
        localTrialNo = [0] * 2
        staircaseTrialNo = [1] * 2

        for i in range(2):
            levList[i] = [0] * (noOfMiniScenes + 2)
            respList[i] = [0] * (noOfMiniScenes + 2)
            kestList[i] = [0] * (noOfMiniScenes + 2)
            reverseList[i] = [0] * (noOfMiniScenes + 2)
            localTrialNo[i] = [0] * (noOfMiniScenes + 2)
            for j in range(noOfMiniScenes + 2):
                levList[i][j] = [0] * 100
                respList[i][j] = [0] * 100
                kestList[i][j] = [0] * 100
                reverseList[i][j] = [0] * 100
                localTrialNo[i][j] = 1



        globalTrialNo = 126
        maxNoFlat = globalTrialNo/(noOfMiniScenes * 2)

        catchTrials = []
        i = 1
        while i < globalTrialNo:
            if i%20 == 0:
                catchTrials.append(round(random() * 10) + i)
            i = i + 1

        print(catchTrials)
      Begin Routine:
        shape = 'circle'


        if trials_2.thisN == 0:
            noOfCollisions = 7
        elif trials_2.thisN == 1:
            noOfCollisions = 1
Flow
  Routine intro
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine conditions_
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 126
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      Routine trial
    LoopTerminator trials
  LoopTerminator trials_2
